PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1088, 614]
  color = $[-1.000,-1.000,-1.000]
  expName = tSwitchTest4
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Routines
  Routine trial
    ImageComponent trialGrid
      image [set every repeat] = $gridImg
      pos [set every repeat] = (gLoc1, gLoc2)
      size [set every repeat] = (gSize1, gSize2)
      startVal [time (s)] = 0.0
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    ImageComponent trialShape
      image [set every repeat] = $shapeStim
      pos [set every repeat] = (loc1, loc2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'b','m'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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    TextComponent trialText
      letterHeight = 0.05
      pos = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = A
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    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        trialText.text = str(trials.thisN)

        if trials.thisN == 0:
            continueRoutine = False

        if condsFile == "tSwitchCond1.xlsx":
            gridImg = "grid2a.png"
            gLoc1 = 0
            gLoc2 = 0.12
            gSize1 = 0.5
            gSize2 = 0.25

            if (shapeStim == "square2.png" or shapeStim == "square3.png"):
                corrAns = "b"
            elif (shapeStim == "diamond2.png" or shapeStim == "diamond3.png"):
                corrAns = "m"
            else:
                corrAns = "err"

            if (trials.thisN % 2) == 0:
                loc1 = -0.12
                loc2 = 0.12
            elif (trials.thisN % 2) == 1:
                loc1 = 0.12
                loc2 = 0.12
            else:
                loc1 = -0.12
                loc2 = 0.12
        elif condsFile == "tSwitchCond2.xlsx":
            gridImg = "grid2a.png"
            gLoc1 = 0
            gLoc2 = -0.12
            gSize1 = 0.5
            gSize2 = 0.25

            if (shapeStim == "square2.png" or "shapeStim == diamond2.png"):
                corrAns = "b"
            elif (shapeStim == "square3.png" or "shapeStim == diamond3.png"):
                corrAns = "m"
            else:
                corrAns = "err"

            if (trials.thisN % 2) == 0:
                loc1 = -0.12
                loc2 = -0.12
            elif (trials.thisN % 2) == 1:
                loc1 = 0.12
                loc2 = -0.12
            else:
                loc1 = 0.12
                loc2 = -0.12
        elif condsFile == "tSwitchCond3.xlsx":
            gridImg = "grid4a.png"
            gLoc1 = 0
            gLoc2 = 0
            gSize1 = 0.5
            gSize2 = 0.5

            if ((shapeStim == "square2.png" or shapeStim == "square3.png") and loc2 == 0.12):
                corrAns = "b"
            elif ((shapeStim == "diamond2.png" or shapeStim == "diamond3.png") and loc2 == 0.12):
                corrAns = "m"
            elif ((shapeStim == "square2.png" or shapeStim == "diamond2.png") and loc2 == -0.12):
                corrAns = "b"
            elif ((shapeStim == "square3.png" or shapeStim == "diamond3.png") and loc2 == -0.12):
                corrAns = "m"
            else:
                corrAns = "err"

            if (trials.thisN % 4) == 0:
                loc1 = -0.12
                loc2 = 0.12
            elif (trials.thisN % 4) == 1:
                loc1 = 0.12
                loc2 = 0.12
            elif (trials.thisN % 4) == 2:
                loc1 = 0.12
                loc2 = -0.12
            elif (trials.thisN % 4) == 3:
                loc1 = -0.12
                loc2 = -0.12
            else:
                loc1 = 0.12
                loc2 = 0.12
        else:
            continueRoutine = False
      Each Frame:
        if trials.thisN == 0:
            continueRoutine = False
  Routine setup
    CodeComponent setupCode
      Code Type = Auto->JS
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      Begin Experiment:
        loc1 = -0.12
        loc2 = 0.12
        gLoc1 = 0
        gLoc2 = 0
        gridImg = "grid4a.png"
        gSize1 = 0.5
        gSize2 = 0.5
        corrAns = "b"
        instrImage = "instrImg1.png"
    CodeComponent JSCode
      Code Type = Auto->JS
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  Routine instr
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Space to continue.
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    KeyboardComponent instrResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent instrCode
      Code Type = Auto->JS
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      Begin Routine:
        if condsFile == "tSwitchCond1.xlsx":
            instrText.text = "Press 'b' if you see a square. Press 'm' if you see a diamond. Press 'space' to continue"
        elif condsFile == "tSwitchCond2.xlsx":
            instrText.text = "Press 'b' if you see two dots. Press 'm' if you see three dots. Press 'space' to continue"
        elif condsFile == "tSwitchCond3.xlsx":
            instrText.text = "IN THE TOP HALF:Press 'b' if you see a square. Press 'm' if you see a diamond. IN THE BOTTOM HALF: Press 'b' if you see two dots. Press 'm' if you see three dots. Press 'space' to continue."
        else:
            instrText.text = "Press 'space' to continue"
  Routine end
    TextComponent endText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = This is the end of the experiment. Thank you for your time. Please remember to return to the questionnaire to carry on with the study. Press ‘space’ to exit.
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    KeyboardComponent endResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  LoopInitiator taskLoop loopType="TrialHandler"
    conditionsFile = taskCond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'tSwitchCond1.xlsx')]),
      OrderedDict([('condsFile', 'tSwitchCond2.xlsx')]),
      OrderedDict([('condsFile', 'tSwitchCond3.xlsx')])]
    Routine instr
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = fullRandom
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator taskLoop
  Routine end
